PsychoPy2experiment version="2022.1.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = -1.0000, -1.0000, -1.0000
  expName = Patch_Foraging
  keyboardBackend = ioHub
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Routines
  Routine Welcome
    TextComponent Welcometext
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome
        Please press Spacebar to start
    KeyboardComponent exp_start
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine End
    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        This is the end of first trial, now next trial will begin.
        Thank you
  Routine ViewPatch
    CodeComponent view
      Code Type = Py
      Before Experiment:
        import os
        from psychopy import visual, event, core, data
        from pathlib import Path
        import random
      Begin Experiment:
        #competitors = [[1,4],[5,1],[2,5]]
        competitors = [[1,1]]

        #state_c = random.randint(0,2)
        state_c = 0
        #state_t = random.randint(0,1)
        state_t = 1
        state_r = random.randint(1,5)

        l_c = competitors[state_c][0]
        r_c = competitors[state_c][1]

        rect_l = []
        rect_r = []
        img_tree = []
        img_ltree = []
        img_rtree = []
      Begin Routine:
        clock = core.Clock()

        c1 = -250
        c2 = 250

        box_t = visual.Rect(
            win=win,
            units="pix",
            width=1000,
            height=700,
            fillColor= 'red',
            lineColor=[-1, -1, 1]
        )

        box1 = visual.Rect(
            win=win,
            units="pix",
            width=400,
            height=600,
            fillColor= 'black',
            lineColor=[-1, -1, 1]
        )
        box1.pos = [c1,0]

        box2 = visual.Rect(
            win=win,
            units="pix",
            width=400,
            height=600,
            fillColor= 'black',
            lineColor=[-1, -1, 1]
        )
        box2.pos = [c2,0]


        for i in range(l_c):
            rect_x = visual.Rect(win, units="pix",
                width=30,
                height=30,
                fillColor= 'yellow')
            rect_l.append(rect_x)

        for i in range(l_c):
            x = random.uniform(-1, 1)
            y = random.uniform(-1,1)
            x = x*185
            y = y*285
            rect_l[i].pos = [c1+x,y]

        for i in range(r_c):
            rect_x = visual.Rect(win, units="pix",
                width=30,
                height=30,
                fillColor= 'yellow')
            rect_r.append(rect_x)

        for i in range(r_c):
            x = random.uniform(-1, 1)
            y = random.uniform(-1,1)
            x = x*185
            y = y*285
            rect_r[i].pos = [c2+x,y]


        for i in range(state_r):
            img = visual.ImageStim(
                win=win,
                image="tree.png",
                units="pix"
            )
            size_x = img.size[0]
            size_y = img.size[1]
            img.size = [size_x * 0.1, size_y * 0.1]
        #    print(img.size)
            img_tree.append(img)

        for i in range(state_r):
            img = visual.ImageStim(
                win=win,
                image="tree.png",
                units="pix"
            )
            size_x = img.size[0]
            size_y = img.size[1]
            img.size = [size_x * 0.1, size_y * 0.1]
            img_ltree.append(img)

        for i in range(state_r):
            img = visual.ImageStim(
                win=win,
                image="tree.png",
                units="pix"
            )
            size_x = img.size[0]
            size_y = img.size[1]
            img.size = [size_x * 0.1, size_y * 0.1]
            img_rtree.append(img)

        #print(len(img_ltree))
        #print(len(img_rtree))

        for i in range(len(img_tree)):
            x = random.uniform(-1, 1)
            y = random.uniform(-1,1)
            size_x = img_tree[0].size[0]
            size_y = img_tree[0].size[1]

            x = x*(200-size_x)
            y = y*(300-size_y)
        #    print(x,y)
            img_tree[i].pos = [x,y]

        for i in range(len(img_tree)):
            pos = img_tree[i].pos
            x_l = pos[0] + c1
            y_l = pos[1]
            x_r = pos[0] + c2
            y_r = pos[1]
            print(pos)
            print(x_l,y_l)
            print(x_r,y_r)
            img_ltree[i].pos = [x_l,y_l]
            img_rtree[i].pos = [x_r,y_r]


        #for i in range(len(img_rtree)):
        #    posr = img_tree[i].pos
        #    x = posr[0] + c2
        #    y = posr[1]
        #    print(x,y)
        #    img_rtree[i].pos = [x,y]

        clock.reset()
        while clock.getTime() < 5: # draw moving stimulus
            if state_t:
                box_t.draw()
            box1.draw()
            box2.draw()

            for i in range(state_r):
        #        img_ltree[i].draw()
                img_rtree[i].draw()
                img_ltree[i].draw()

            for i in range(l_c):
                rect_l[i].draw()
            for i in range(r_c):
                rect_r[i].draw()

            win.flip() # make the drawn things visible
      End Routine:
        thisExp.addData('left_competitors', l_c)
        thisExp.addData('right_competitors', r_c)
        thisExp.addData('threat', state_t)
        thisExp.addData('no_rewards', state_r)
  Routine Patch_Selection
    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Foraging
    CodeComponent code_2
      Code Type = Py
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      Before Experiment:
        import os
        from psychopy import visual, event, core
        import random
      Begin Experiment:
        reward_value = 10;
        cap_time =-1;
      Begin Routine:
        box = visual.Rect(
            win=win,
            units="pix",
            width=400,
            height=600,
            fillColor= 'black',
            lineColor=[-1, -1, 1]
        )
        end_img = visual.ImageStim(
                win=win,
                image="attacked.png",
                units="pix"
        )

        cap_txt = visual.TextBox2(
            win,
            "Forage",
            font='Open Sans',
            units="pix",
            color=(1, 0, 0),
            colorSpace='rgb',
            letterHeight = 40
        )

        cap_txt.pos= [box.pos[0]+ 150,325]
        cap_txt.draw()
        box.draw()
        print("Trial started");
        data = thisExp.getAllEntries()
        key = data[0]['key_resp.keys']




        if key == 'left':
            for i in range(len(rect_l)):
                position = rect_l[i].pos
                position[0] -= -250
                rect_l[i].pos = position
            #
            n = len(rect_l)
            p = random.randint(0,n-1)
           # print(key)
            clock = core.Clock()

            LEFT = -10
            RIGHT = 10
            rect = visual.Rect(
                win=win,
                units="pix",
                width=400,
                height=600,
                fillColor= 'black',
                lineColor=[-1, -1, 1]
            )

            clock.reset()

            p_pos = rect_l[p].pos
            depriciated_reward =[];

            reward_list = list(range(state_r));
            #print("state_r",l_c);
            dep_rate = 7 - l_c;
            reward_ctr = dep_rate;
            attack_time = 2;
            flag=0;
            while clock.getTime()<10: # draw moving stimulus
                if(clock.getTime() > reward_ctr):
                    reward_ctr= reward_ctr + dep_rate;
                    rnd = random.randint(0,len(reward_list))
                    del reward_list[rnd:rnd +1 ]
                if state_t == 1:
                    pred_x = random.randint(0, 400)
                    pred_y = random.randint(0, 600)
                    pred_x = pred_x - 250
                    if clock.getTime() > attack_time:
                        attack_time = attack_time + 2
                        dist = []
                        del_comp = 0;
                        print("number of comp is ",len(rect_l))
                        for i in range(len(rect_l)):
                            dist.append([pow(abs(rect_l[i].pos[0]-pred_x),2) + pow(abs(rect_l[i].pos[1]-pred_y),2),i])
                        dist.sort()
                        print(dist)
                        if(dist[0][0] < 500000):
                            del_comp = dist[0][1];
                            print(i)
                            del rect_l[del_comp];
                            if i==p:
                                cap_txt.text= "Attacked by Predator";
                                print("Attacked by Predator")
                                flag=1;

                if(flag):
                    end_img.draw()
                    core.wait(10-clock.getTime())
                else:
                    k = event.getKeys()
                    if k: # if there was an actual key pressed:
                        if k[0] == 'left':
                            p_pos[0] += LEFT
                        elif k[0] == 'right':
                            p_pos[0] += RIGHT
                        elif k[0] == 'up':
                            p_pos[1] += RIGHT
                        elif k[0] == 'down':
                            p_pos[1] += LEFT
                        elif k[0] == 'q':
                            core.quit()
            #
                    if p_pos[0] > (200-15):
                        p_pos[0] = (200-15)
                    elif p_pos[0]<-(200-15):
                        p_pos[0] = -(200-15)
                    if p_pos[1]> (300-15):
                        p_pos[1] = (300-15)
                    elif p_pos[1]<-(300-15):
                        p_pos[1] = -(300-15)

                    rect_l[p].pos = p_pos # directly update both x *and* y
                    box.draw()
                    for j,i in enumerate(reward_list):
                        ind_tree = img_tree[i];
                        tree_pos_x = ind_tree.pos[0];
                        tree_pos_y= ind_tree.pos[1];

                        if(abs(p_pos[0]-tree_pos_x)< 20 and  abs(p_pos[1]-tree_pos_y)< 20):
                            cap_txt.text= "Reward Captured";
                            del reward_list[j:j+1];
                            cap_time = clock.getTime();
                            # print("capture Time",cap_time);

                        if(cap_time < clock.getTime()- 0.7 ):
                            cap_txt.text= "Forage";



                    for i in range(len(rect_l)):
                        rect_l[i].draw()
                    for i in reward_list:
                        img_tree[i].draw()
                    cap_txt.draw();
                win.flip() # make the drawn things visible
        else:
            for i in range(len(rect_r)):
                position = rect_r[i].pos
                position[0] -= 250
                rect_r[i].pos = position
            #
            n = len(rect_r)
            p = random.randint(0,n-1)
            print(key)
            clock = core.Clock()

            LEFT = -10
            RIGHT = 10
            rect = visual.Rect(
                win=win,
                units="pix",
                width=400,
                height=600,
                fillColor= 'black',
                lineColor=[-1, -1, 1]
            )

            clock.reset()
            p_pos = rect_r[p].pos
            reward_list = list(range(state_r));
            dep_rate = 7 - r_c;
            reward_ctr = dep_rate;
            attack_time = 2;
            flag=0;
            while clock.getTime()<10: # draw moving stimulus
                if(clock.getTime() > reward_ctr):
                    reward_ctr= reward_ctr + dep_rate;
                    rnd = random.randint(0,len(reward_list))
                    del reward_list[rnd:rnd +1 ]
                if state_t == 1:
                    pred_x = random.randint(0, 400)
                    pred_y = random.randint(0, 600)
                    pred_x = pred_x - 250
                    if clock.getTime() > attack_time:
                        attack_time = attack_time + 2
                        dist = []
                        del_comp = 0;
                        print("number of comp is ",len(rect_r))
                        for i in range(len(rect_r)):
                            dist.append([pow(abs(rect_r[i].pos[0]-pred_x),2) + pow(abs(rect_r[i].pos[1]-pred_y),2),i])
                        dist.sort()
                        print(dist)
                        if(dist[0][0] < 500000):
                            del_comp = dist[0][1];
                            print(i)
                            del rect_r[del_comp];
                            if i==p:
                                cap_txt.text= "Attacked by Predator";
                                print("Attacked by Predator")
                                flag=1;
                if(flag):
                    end_img.draw()
                else:
                    k = event.getKeys()
                    if k: # if there was an actual key pressed:
                        if k[0] == 'left':
                            p_pos[0] += LEFT
                        elif k[0] == 'right':
                            p_pos[0] += RIGHT
                        elif k[0] == 'up':
                            p_pos[1] += RIGHT
                        elif k[0] == 'down':
                            p_pos[1] += LEFT
                        elif k[0] == 'q':
                            core.quit()
            #
                    if p_pos[0] > (200-15):
                        p_pos[0] = (200-15)
                    elif p_pos[0]<-(200-15):
                        p_pos[0] = -(200-15)
                    if p_pos[1]> (300-15):
                        p_pos[1] = (300-15)
                    elif p_pos[1]<-(300-15):
                        p_pos[1] = -(300-15)

                    rect_r[p].pos = p_pos # directly update both x *and* y
                    box.draw()
                    for j,i in enumerate(reward_list):
                        ind_tree = img_tree[i];
                        tree_pos_x = ind_tree.pos[0];
                        tree_pos_y= ind_tree.pos[1];

                        if(abs(p_pos[0]-tree_pos_x)< 20 and  abs(p_pos[1]-tree_pos_y)< 20):
                            cap_txt.text= "Reward Captured";
                            del reward_list[j:j+1];
                            cap_time = clock.getTime();
                            # print("capture Time",cap_time);

                        if(cap_time < clock.getTime()- 0.7 ):
                            cap_txt.text= "Forage";



                    for i in range(len(rect_r)):
                        rect_r[i].draw()
                    for i in reward_list:
                        img_tree[i].draw()
                    cap_txt.draw();

                win.flip() # make the drawn things visible
  Routine routine_1
  Routine routine
  Routine Forage
    CodeComponent code
      Code Type = Py
      Begin Routine:
        import os
        from psychopy import visual, event, core

        win = visual.Window(units = 'pix', color = 'black') # Set the window

        x = 0 # initial positions
        y = 0

        LEFT = -100
        RIGHT = 100

        # create just once, no need to specify a position yet:
        circle = visual.Circle(win, radius = 10, fillColor= 'yellow')

        while True: # draw moving stimulus

            k = event.getKeys()
            if k: # if there was an actual key pressed:
                if k[0] == 'left':
                    x = LEFT
                elif k[0] == 'right':
                    x = RIGHT
                elif k[0] == 'q':
                    core.quit()

            y += 2 # make circle constantly move upwards
            circle.pos = [x, y] # directly update both x *and* y
            circle.draw()
            win.flip() # make the drawn things visible

        win.close()
        core.quit()
Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine Welcome
    Routine ViewPatch
    Routine Patch_Selection
    Routine Foraging
    Routine End
  LoopTerminator trials
